CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tif") (file does contain "PECCU")

Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<PlateID>.*)_(?P<WellID>.*)_T(?P<timepoint>[0-9]{4})F(?P<Field>.*)L01A(?P<acqcycle>[0-9]{2})Z(?P<Zslice>[0-9]{2})C(?P<dye>[0-9]{2}).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<PlateID>.*)[\\/](?P<Folder>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C01.tif") (metadata does Folder "PECCU")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C04.tif") (metadata does Folder "PECCU")
    Name to assign these images:TranscriptionFactor
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['N/A']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:TranscriptionFactor
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:20
    Threshold correction factor:.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:30
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:ExpandedNuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Perinuclear
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:TranscriptionFactor
    Select objects to measure:Cell, Nuclei, Perinuclear

RelateObjects:[module_num:10|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
    Parent objects:Cell
    Child objects:Perinuclear
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PeriNuc_Cell
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
RelateObjects:[module_num:11|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
    Parent objects:Cell
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nuc_Cell
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
RescaleIntensity:[module_num:12|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notes:['']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
    Select the input image:TranscriptionFactor
    Name the output image:RescaleTF
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:13|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notes:['']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleTF
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Cell
    Select outline color:#E344F0
    Select objects to display:Nuclei
    Select outline color:#4EEBF3
    Select objects to display:PeriNuc_Cell

Tile:[module_num:14|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notes:['']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
    Select an input image:RescaleTF
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:2
    Final number of columns:1
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:OrigOverlay1

SaveImages:[module_num:15|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<PlateID>_\g<WellID>_\g<Field>
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|pics
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToDatabase:[module_num:16|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:384
    Select the plate metadata:PlateID
    Select the well metadata:WellID
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Cell
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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