CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^W(?P<WellID>[0-9]{4})F00(?P<Field>[0-9]{1,2})T0001Z000C(?P<channel>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2.tif")
    Name to assign these images:CTR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3.tif")
    Name to assign these images:iNOS
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['N/A']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.7
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0002,0.05
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:CTR
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:8
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.002,0.5
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CTR, iNOS
    Select objects to measure:Cell

FilterObjects:[module_num:8|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
    Select the objects to filter:Cell
    Name the output objects:iNOSpos
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_iNOS
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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
ExportToSpreadsheet:[module_num:9|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notes:['Export data as a CSV file.', '', 'Make sure to check that every measurement is selected below under "select measurements"']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/Image Analysis/NJ5
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_06IdentifySecondaryObjects,Image|ExecutionTime_05IdentifyPrimaryObjects,Image|ExecutionTime_02Metadata,Image|ExecutionTime_07MeasureObjectIntensity,Image|ExecutionTime_04Groups,Image|ExecutionTime_08FilterObjects,Image|ExecutionTime_01Images,Image|URL_CTR,Image|URL_DAPI,Image|URL_iNOS,Image|MD5Digest_DAPI,Image|MD5Digest_iNOS,Image|MD5Digest_CTR,Image|Count_Nuclei,Image|Count_iNOSpos,Image|Count_Cell,Image|Threshold_WeightedVariance_Nuclei,Image|Threshold_WeightedVariance_Cell,Image|Threshold_OrigThreshold_Cell,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CellProfiler_
    Overwrite existing files without warning?:No
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