CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^W(?P<WellID>[0-9]{4})F(?P<Field>[0-9]{1,4})T(?P<Time>[0-9]{1,4})Z(?P<Zstack>[0-9]{1,3})C(?P<dye>[0-9]).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2.tif")
    Name to assign these images:H3K18Lac
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:WellID

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.002,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:6|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
    Select images to measure:H3K18Lac
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Dropbox (University of Michigan)\\O'Meara lab box\\Mike\\1-EXPERIMENTS\\MM224 - IRE1 Effect on PL Fusion-4\\CP_Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_05IdentifyPrimaryObjects,Image|ExecutionTime_01Images,Image|ExecutionTime_02Metadata,Image|ExecutionTime_06MeasureObjectIntensity,Image|ExecutionTime_04Groups,Image|Width_DAPI,Image|Width_H3K18Lac,Image|Group_Length,Image|Group_Index,Image|Group_Number,Image|ModuleError_04Groups,Image|ModuleError_06MeasureObjectIntensity,Image|ModuleError_02Metadata,Image|ModuleError_05IdentifyPrimaryObjects,Image|ModuleError_03NamesAndTypes,Image|ModuleError_01Images,Image|Threshold_OrigThreshold_Nuclei,Image|Threshold_SumOfEntropies_Nuclei,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CPouput_
    Overwrite existing files without warning?:Yes
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